PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = DigitSpanDB
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Routines
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to memorise the number sequence presented. You will start with a list of 3 numbers. If you are able to correctly recall two out of three lists you will proceed to longer list trials. Type out your answer when "Recall" screen appears using the numbers at the top of the keyboard. If you make a mistake you can use backspace to correct it. Press enter to confirm your answer. Feedback will be provided. Press space to start the experiment. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    CodeComponent feedback_code
      Code Type = Py
      End Routine:
        # for incorrect, check that two responses exist
        # and that their sum of last two responses is zero
        if len(allResponses) >= 2 and sum(allResponses[-2:]) == 0:
            trials.finished = True
            blocks.finished = True
        # If sum of last two responses is 2, move to next sequence
        elif sum(allResponses[-2:]) == 2:
            trials.finished = True
            allResponses = []
  Routine Presentation
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 1
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    CodeComponent pres_code
      Code Type = Py
      Begin Routine:
        # Convert sequence to list
        nList = list(str(digits))
      Each Frame:
        # Convert time to a list index
        i = int(np.floor(t-1))

        # Index the current number in the list
        # Or end routine if all numbers presented
        if i == len(nList):
            continueRoutine = False
        else:
            pres_text.text = nList[i]
  Routine Recall
    TextComponent recall_text
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return', 'backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent check_keys
      Code Type = Py
      Begin Experiment:
        # Store responses
        allResponses = []
      Each Frame:
        if len(key_resp_2.keys) > 0: #to prevent list index error
            if key_resp_2.keys[-1] == 'backspace': #allow backspacing
                try: #to avoid list index errors when backspacing
                    key_resp_2.keys.pop(len(key_resp_2.keys)-1)
                    key_resp_2.keys.pop(len(key_resp_2.keys)-1)
                except:
                    print('no need to backspace')
            elif key_resp_2.keys[-1] == 'return': #allows return to end routine
                key_resp_2.keys.pop(len(key_resp_2.keys)-1)
                continueRoutine = False

        current_resp = ''.join(key_resp_2.keys)
      End Routine:
        correct = 0
        if int(current_resp) == digits:
            correct = 1
            msg = 'Correct'
            trials.addData('correct', correct) #where trials is the name of the loop
        else:
            msg = 'Incorrect'
            trials.addData('Incorrect', correct) #store for accuracy
        trials.addData('response', current_resp) #store full response

        # Store each response in list
        allResponses.append(correct)
    TextComponent pts_response
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every frame] = $current_resp
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
Flow
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = choose_digitSpan.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condition_file', 'three.xlsx')]),
      OrderedDict([('condition_file', 'four.xlsx')]),
      OrderedDict([('condition_file', 'five.xlsx')]),
      OrderedDict([('condition_file', 'six.xlsx')]),
      OrderedDict([('condition_file', 'seven.xlsx')]),
      OrderedDict([('condition_file', 'eight.xlsx')]),
      OrderedDict([('condition_file', 'nine.xlsx')]),
      OrderedDict([('condition_file', 'ten.xlsx')]),
      OrderedDict([('condition_file', 'eleven.xlsx')]),
      OrderedDict([('condition_file', 'twelve.xlsx')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = sequential
      nReps = 1
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      Routine Presentation
      Routine Recall
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
