PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 3.1.5
  Window size (pixels) = [1440, 900]
  expName = digit-span-forward
  logging level = debug
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Routines
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to memorise the number sequence presented. You will start with a list of 3 numbers. If you are able to correctly recall two out of three lists you will proceed to longer list trials. Type out your answer when "Recall" screen appears using the numbers at the top of the keyboard. If you make a mistake you can use backspace to correct it. Press enter to confirm your answer. Feedback will be provided. Press space to start the experiment. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    CodeComponent feedback_code
      Code Type = Both
      End JS Routine:
        // for incorrect, check that two responses exist
        // and that their sum of last two responses is zero

        if (allResponses.length >= 2 && allResponses.slice(-2).reduce((a,b)=>a+b) === 0) {
            trials.finished = true;
            blocks.finished = true;
        } else if (allResponses.slice(-2).reduce((a,b)=>a+b) === 2) {
            allResponses = [];
        }
      End Routine:
        # for incorrect, check that two responses exist
        # and that their sum of last two responses is zero
        if len(allResponses) >= 2 and sum(allResponses[-2:]) == 0:
            trials.finished = True
            blocks.finished = True
        # If sum of last two responses is 2, move to next sequence
        elif sum(allResponses[-2:]) == 2:
            trials.finished = True
            allResponses = []
  Routine Presentation
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 1
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    CodeComponent pres_code
      Code Type = Both
      Begin JS Routine:
        // Convert sequence to list
        nList = digits.toString().split('').map((i)=>Number(i))
      Begin Routine:
        # Convert sequence to list
        nList = list(str(digits))
      Each Frame:
        # Convert time to a list index
        i = int(np.floor(t-1))

        # Index the current number in the list
        # Or end routine if all numbers presented
        if i == len(nList):
            continueRoutine = False
        else:
            pres_text.text = nList[i]
      Each JS Frame:
        // Convert time ti a list index
        i = Math.floor(t-1);

        // Index current number in the list
        // or end routine if all numbers presented
        if (i === nList.length) {
            continueRoutine = false;
        } else {
            pres_text.text = nList[i]
        }
      End JS Routine:
        pres_text.text = ''
  Routine Recall
    TextComponent recall_text
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return', 'backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent check_keys
      Code Type = Both
      Begin Experiment:
        # Store responses
        allResponses = []
      Begin JS Experiment:
        // Store responses
        allResponses = []
        current_resp = '';
      Begin Routine:
        key_resp_2.rt = []
      Each Frame:
        if len(key_resp_2.keys) > 0: #to prevent list index error
            if key_resp_2.keys[-1] == 'backspace': #allow backspacing
                try: #to avoid list index errors when backspacing
                    key_resp_2.keys.pop(len(key_resp_2.keys)-1)
                    key_resp_2.keys.pop(len(key_resp_2.keys)-1)
                except:
                    print('No need to backspace')
            elif key_resp_2.keys[-1] == 'return': #allows return to end routine
                key_resp_2.keys.pop(len(key_resp_2.keys)-1)
                continueRoutine = False

        current_resp = ''.join(key_resp_2.keys)
      Each JS Frame:
        if (key_resp_2.keys !== undefined && key_resp_2.keys.length > 0) {
            if (key_resp_2.keys[key_resp_2.keys.length - 1] === 'backspace') {
                try {
                    key_resp_2.keys.pop(key_resp_2.keys.length-1);
                    key_resp_2.keys.pop(key_resp_2.keys.length-1);
                } catch (err) {
                    console.log("No need to backspace")
                }
            } else if (key_resp_2.keys[key_resp_2.keys.length - 1] === 'return') {
                key_resp_2.keys.pop(key_resp_2.keys.length-1);
                continueRoutine = false;
            }
        }

        try {
            current_resp = key_resp_2.keys.join('');
        } catch (err) {
            current_resp = ''
        }
      End JS Routine:
        correct = 0;

        if (Number(current_resp) === digits) {
            correct = 1;
            msg = "Correct";
            psychoJS.experiment.addData("correct", correct)
        } else {
            msg = "Incorrect";
            psychoJS.experiment.addData("Incorrect", correct)
        }
        psychoJS.experiment.addData("response", current_resp);

        allResponses.push(correct)
        pts_response.text = '';
      End Routine:
        correct = 0
        if int(current_resp) == digits:
            correct = 1
            msg = 'Correct'
            trials.addData('correct', correct) #where trials is the name of the loop
        else:
            msg = 'Incorrect'
            trials.addData('Incorrect', correct) #store for accuracy
        trials.addData('response', current_resp) #store full response

        # Store each response in list
        allResponses.append(correct)
    TextComponent pts_response
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every frame] = $current_resp
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  Routine rng
    TextComponent rng_instr
      letterHeight = 0.05
      pos = (0, .15)
      startVal [time (s)] = 0.0
      text = This is your 4-digit completion code. Please write this down for later use. When you are finished, press SPACE to end the experiment. 
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    TextComponent rng_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $random_number
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    KeyboardComponent rng_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent rng_code
      Code Type = JS
      Begin JS Experiment:
        random_number = Math.floor(Math.random() * 9999) + 1000;
Flow
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = choose_digitSpan.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condition_file', 'three.xlsx')]),
      OrderedDict([('condition_file', 'four.xlsx')]),
      OrderedDict([('condition_file', 'five.xlsx')]),
      OrderedDict([('condition_file', 'six.xlsx')]),
      OrderedDict([('condition_file', 'seven.xlsx')]),
      OrderedDict([('condition_file', 'eight.xlsx')]),
      OrderedDict([('condition_file', 'nine.xlsx')]),
      OrderedDict([('condition_file', 'ten.xlsx')]),
      OrderedDict([('condition_file', 'eleven.xlsx')]),
      OrderedDict([('condition_file', 'twelve.xlsx')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = sequential
      nReps = 1
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      Routine Presentation
      Routine Recall
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine rng
